# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: SQE_Anritsu_MG3694B

# The version string should be updated whenever changes are made to this config file
version: 1.10

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path:

interface: VISA
address: GPIB1::5::INSTR

[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: MG3694B

# Check instrument model id at startup (True or False). Default is False
check_model: True

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: ANRITSU,MG3694B,084508,3.49

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: :SYST:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: :SYST:LANG "SCPI";

# Final commands sent to the instrument when closing the driver
final: 


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
[Frequency]
unit: Hz
datatype: DOUBLE
def_value: 5.0E9
set_cmd: :SOUR:FREQ:CW

[Power level]
unit: dBm
datatype: DOUBLE
def_value: -20
low_lim: -20
high_lim: 10
set_cmd: :SOUR:POW:LEV:IMM:AMPL <*>dBm
tooltip: Negative numbers don't work

# [Automatic levelling control (ALC)]
# datatype: BOOLEAN
# def_value: True
# set_cmd: :POW:ALC

# [Phase]
# unit: rad
# datatype: DOUBLE
# def_value: 0
# set_cmd: :SOUR:PHAS:ADJ <*>RAD
# get_cmd: :SOUR:PHAS:ADJ?

[Output]
datatype: BOOLEAN
def_value: False
set_cmd: :OUTP:STAT

[Output protection]
datatype: BOOLEAN
def_value: False
set_cmd: :OUTP:PROT
tooltip: Causes the output to be turned off during frequency changes