# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: SQE_Keysight_34420A

# The version string should be updated whenever changes are made to this config file
version: 1.3

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SQE_Keysight_34420A

[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: 34420A

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: :SYST:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: TRIG:SOUR IMM

# Final commands sent to the instrument when closing the driver
final: 

# Send Go-to-local over GPIB interface after closing instrument
gpib_go_to_local: True

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
[Function]
datatype: COMBO
def_value: Voltage DC
combo_def_1: Voltage DC
combo_def_2: Voltage ratio
combo_def_3: Voltage difference
combo_def_4: Resistance (2-wire)
combo_def_5: Resistance (4-wire)
combo_def_6: Temperature
cmd_def_1: "VOLT"
cmd_def_2: "VOLT:DC:RAT"
cmd_def_3: "VOLT:DC:DIFF"
cmd_def_4: "RES"
cmd_def_5: "FRES"
cmd_def_6: "TEMP"
set_cmd: SENSe:FUNCtion
section: Function

[Auto range ch1]
datatype: BOOLEAN
set_cmd: SENSe1:VOLTage:DC:RANGe:AUTO
group: Voltage Measurement Configuration Commands
section: ch1

[Auto range ch2]
datatype: BOOLEAN
set_cmd: SENSe2:VOLTage:DC:RANGe:AUTO
group: Voltage Measurement Configuration Commands
section: ch2

[Voltage range ch1]
datatype: DOUBLE
unit: mV
low_lim: 1
high_lim: 10000
;combo_def_1: min
;combo_def_2: max
;combo_def_3: 1 mV
;combo_def_4: 10 mV
;combo_def_5: 100 mV
;combo_def_6: 1 V
;combo_def_7: 10 V
;cmd_def_1: MIN
;cmd_def_2: MAX
;cmd_def_3: 1
;cmd_def_4: 10
;cmd_def_5: 100
;cmd_def_6: 1000
;cmd_def_7: 10000
state_quant: Auto range ch1
state_value_1: 0
set_cmd: SENSe1:VOLTage:DC:RANGe
group: Voltage Measurement Configuration Commands
section: ch1

[Voltage range ch2]
datatype: DOUBLE
unit: mV
low_lim: 1
high_lim: 10000
;combo_def_1: min
;combo_def_2: max
;combo_def_3: 1 mV
;combo_def_4: 10 mV
;combo_def_5: 100 mV
;combo_def_6: 1 V
;combo_def_7: 10 V
;cmd_def_1: MIN
;cmd_def_2: MAX
;cmd_def_3: 1
;cmd_def_4: 10
;cmd_def_5: 100
;cmd_def_6: 1000
;cmd_def_7: 10000
state_quant: Auto range ch2
state_value_1: 0
set_cmd: SENSe2:VOLTage:DC:RANGe
group: Voltage Measurement Configuration Commands
section: ch2

[Voltage resolution ch1]
datatype: COMBO
combo_def_1: min
combo_def_2: max
cmd_def_1: MIN
cmd_def_2: MAX
tooltip: MIN selects the smallest value = highest resolution; MAX selects the largest value = least resolution
set_cmd: SENSe1:VOLTage:DC:RESolution
group: Voltage Measurement Configuration Commands
section: ch1

[Voltage resolution ch2]
datatype: COMBO
combo_def_1: min
combo_def_2: max
cmd_def_1: MIN
cmd_def_2: MAX
tooltip: MIN selects the smallest value = highest resolution; MAX selects the largest value = least resolution
set_cmd: SENSe2:VOLTage:DC:RESolution
group: Voltage Measurement Configuration Commands
section: ch2

[Voltage integration time ch1]
datatype: COMBO
def_value: 10
permission: WRITE
combo_def_1: 0.02
combo_def_2: 0.2
combo_def_3: 1
combo_def_4: 2
combo_def_5: 10
combo_def_6: 20
combo_def_7: 100
combo_def_8: 200
combo_def_9: min
combo_def_10: max
cmd_def_1: 0.02
cmd_def_2: 0.2
cmd_def_3: 1
cmd_def_4: 2
cmd_def_5: 10
cmd_def_6: 20
cmd_def_7: 100
cmd_def_8: 200
cmd_def_9: MIN
cmd_def_10: MAX
set_cmd: SENSe1:VOLTage:DC:NPLCycles
group: Voltage Measurement Configuration Commands
section: ch1

[Voltage integration time ch2]
datatype: COMBO
permission: WRITE
def_value: 10
combo_def_1: 0.02
combo_def_2: 0.2
combo_def_3: 1
combo_def_4: 2
combo_def_5: 10
combo_def_6: 20
combo_def_7: 100
combo_def_8: 200
combo_def_9: min
combo_def_10: max
cmd_def_1: 0.02
cmd_def_2: 0.2
cmd_def_3: 1
cmd_def_4: 2
cmd_def_5: 10
cmd_def_6: 20
cmd_def_7: 100
cmd_def_8: 200
cmd_def_9: MIN
cmd_def_10: MAX
set_cmd: SENSe2:VOLTage:DC:NPLCycles
group: Voltage Measurement Configuration Commands
section: ch2


[2-wires resistance range]
datatype: COMBO
def_value: min/max
combo_def_1: min/max
combo_def_2: auto
permission: NONE
group: Resistance Measurement Configuration Commands
section: Resistance

[2-wires resistance min/max range]
datatype: COMBO
def_value: max
combo_def_1: min
combo_def_2: max
cmd_def_1: MIN
cmd_def_2: MAX
state_quant: 2-wires resistance range
state_value_1: min/max
set_cmd: SENSe:RESistance:RANGe <*> 
group: Resistance Measurement Configuration Commands
section: Resistance

[2-wires resistance auto range]
datatype: BOOLEAN
state_quant: 2-wires resistance range
state_value_1: auto
set_cmd: SENSe:RESistance:RANGe:AUTO
group: Resistance Measurement Configuration Commands
section: Resistance

[2-wires resistance resolution]
datatype: COMBO
combo_def_1: min
combo_def_2: max
cmd_def_1: MIN
cmd_def_2: MAX
tooltip: MIN selects the smallest value = highest resolution; MAX selects the largest value = least resolution
set_cmd: SENSe:RESistance:RESolution <*>
group: Resistance Measurement Configuration Commands
section: Resistance

[2-wires resistance integration time]
datatype: COMBO
permission: WRITE
def_value: 10
combo_def_1: 0.02
combo_def_2: 0.2
combo_def_3: 1
combo_def_4: 2
combo_def_5: 10
combo_def_6: 20
combo_def_7: 100
combo_def_8: 200
combo_def_9: min
combo_def_10: max
cmd_def_1: 0.02
cmd_def_2: 0.2
cmd_def_3: 1
cmd_def_4: 2
cmd_def_5: 10
cmd_def_6: 20
cmd_def_7: 100
cmd_def_8: 200
cmd_def_9: MIN
cmd_def_10: MAX
set_cmd: SENSe:RESistance:NPLCycles <*>
group: Resistance Measurement Configuration Commands
section: Resistance

[2-wires resistance offset compensation]
datatype: BOOLEAN
def_value: OFF
set_cmd: SENSe:RESistance:OCOMpensated
group: Resistance Measurement Configuration Commands
section: Resistance

[4-wires resistance range]
datatype: COMBO
def_value: min/max
combo_def_1: min/max
combo_def_2: auto
permission: NONE
group: Four-terminals resistance Measurement Configuration Commands
section: Four-terminals resistance

[4-wires resistance min/max range]
datatype: COMBO
def_value: max
combo_def_1: min
combo_def_2: max
cmd_def_1: MIN
cmd_def_2: MAX
state_quant: 4-wires resistance range
state_value_1: min/max
set_cmd: SENSe:FRESistance:RANGe <*> 
group: Four-terminals resistance Measurement Configuration Commands
section: Four-terminals resistance

[4-wires resistance auto range]
datatype: BOOLEAN
state_quant: 4-wires resistance range
state_value_1: auto
set_cmd: SENSe:FRESistance:RANGe:AUTO
group: Four-terminals resistance Measurement Configuration Commands
section: Four-terminals resistance

[4-wires resistance resolution]
datatype: COMBO
combo_def_1: min
combo_def_2: max
cmd_def_1: MIN
cmd_def_2: MAX
tooltip: MIN selects the smallest value = highest resolution; MAX selects the largest value = least resolution
set_cmd: SENSe:FRESistance:RESolution <*>
group: Four-terminals resistance Measurement Configuration Commands
section: Four-terminals resistance

[4-wires resistance integration time]
datatype: COMBO
permission: WRITE
def_value: 10
combo_def_1: 0.02
combo_def_2: 0.2
combo_def_3: 1
combo_def_4: 2
combo_def_5: 10
combo_def_6: 20
combo_def_7: 100
combo_def_8: 200
combo_def_9: min
combo_def_10: max
cmd_def_1: 0.02
cmd_def_2: 0.2
cmd_def_3: 1
cmd_def_4: 2
cmd_def_5: 10
cmd_def_6: 20
cmd_def_7: 100
cmd_def_8: 200
cmd_def_9: MIN
cmd_def_10: MAX
set_cmd: SENSe:FRESistance:NPLCycles <*>
group: Four-terminals resistance Measurement Configuration Commands
section: Four-terminals resistance

[4-wires resistance offset compensation]
datatype: BOOLEAN
def_value: OFF
set_cmd: SENSe:FRESistance:OCOMpensated
group: Four-terminals resistance Measurement Configuration Commands
section: Four-terminals resistance

[4-wire low power resistance mode]
datatype: BOOLEAN
def_value: OFF
set_cmd: SENSe:FRESistance:POWer:LIMit:STATe
group: Four-terminals resistance Measurement Configuration Commands
section: Four-terminals resistance

[4-wire voltage limited resistance mode]
datatype: BOOLEAN
def_value: OFF
set_cmd: SENSe:FRESistance:VOLTage:LIMit:STATe
group: Four-terminals resistance Measurement Configuration Commands
section: Four-terminals resistance

[4-wire voltage limit]
datatype: COMBO
permission: WRITE
def_value: 20 mV (min)
combo_def_1: 20 mV (min)
combo_def_2: 100 mV
combo_def_3: 500 mV (max)
cmd_def_1: MIN
cmd_def_2: 0.1
cmd_def_3: MAX
state_quant: 4-wire voltage limited resistance mode
state_value_1: ON
set_cmd: SENSe:FRESistance:VOLTage:LIMit:VALue
group: Four-terminals resistance Measurement Configuration Commands
section: Four-terminals resistance

[Temperature unit]
datatype: COMBO
def_value: K
combo_def_1: C
combo_def_2: CEL
combo_def_3: F
combo_def_4: FAR
combo_def_5: K
cmd_def_1: C
cmd_def_2: CEL
cmd_def_3: F
cmd_def_4: FAR
cmd_def_5: K
set_cmd: UNIT:TEMPerature <*>
group: Temperature Measurement Configuration Commands
section: Temperature

[Temperature integration time]
datatype: COMBO
permission: WRITE
def_value: 10
combo_def_1: 0.02
combo_def_2: 0.2
combo_def_3: 1
combo_def_4: 2
combo_def_5: 10
combo_def_6: 20
combo_def_7: 100
combo_def_8: 200
combo_def_9: min
combo_def_10: max
cmd_def_1: 0.02
cmd_def_2: 0.2
cmd_def_3: 1
cmd_def_4: 2
cmd_def_5: 10
cmd_def_6: 20
cmd_def_7: 100
cmd_def_8: 200
cmd_def_9: MIN
cmd_def_10: MAX
set_cmd: SENSe:TEMPerature:NPLCycles <*>
group: Temperature Measurement Configuration Commands
section: Temperature

[Voltage ch1]
datatype: DOUBLE
unit: V
permission: READ
;get_cmd: ROUTe:TERMinals FRONt1; READ?
state_quant: Function
state_value_1: Voltage DC
section: Readings

[Voltage ch2]
datatype: DOUBLE
unit: V
permission: READ
;get_cmd: ROUTe:TERMinals FRONt2; READ?
state_quant: Function
state_value_1: Voltage DC
section: Readings

[Voltage ratio]
datatype: DOUBLE
unit: V
permission: READ
#get_cmd: MEASure:VOLTage:DC:RATio?
get_cmd: :READ?
state_quant: Function
state_value_1: Voltage ratio
section: Readings

[Voltage difference]
datatype: DOUBLE
unit: V
permission: READ
state_quant: Function
state_value_1: Voltage difference
#get_cmd: MEASure:VOLTage:DC:DIFFerence?
get_cmd: :READ?
section: Readings

[Temperature]
datatype: DOUBLE
permission: READ
get_cmd: :READ?
state_quant: Function
state_value_1: Temperature
section: Readings

[Resistance]
datatype: DOUBLE
unit: Ohm
permission: READ
get_cmd: :READ?
state_quant: Function
state_value_1: Resistance (2-wire)
state_value_2: Resistance (4-wire)
section: Readings

# Null (Relative) Commands

[Null state for voltage measurements ch1]
datatype: BOOLEAN
def_value: OFF
set_cmd: SENSe1:VOLTage:DC:NULL:STATe
group: Voltage measurements ch1
section: Null (Relative) Commands

[Null value for voltage measurements ch1]
datatype: DOUBLE
unit: V
low_lim: -132
high_lim: 132
set_cmd: SENSe1:VOLTage:DC:NULL:VALue
state_quant: Null state for voltage measurements ch1
state_value_1: ON
group: Voltage measurements ch1
section: Null (Relative) Commands

[Null state for voltage measurements ch2]
datatype: BOOLEAN
def_value: OFF
set_cmd: SENSe2:VOLTage:DC:NULL:STATe
group: Voltage measurements ch2
section: Null (Relative) Commands

[Null value for voltage measurements ch2]
datatype: DOUBLE
unit: V
low_lim: -132
high_lim: 132
set_cmd: SENSe2:VOLTage:DC:NULL:VALue
state_quant: Null state for voltage measurements ch2
state_value_1: ON
group: Voltage measurements ch2
section: Null (Relative) Commands

[Null state for resistance measurements]
datatype: BOOLEAN
def_value: OFF
set_cmd: SENSe:FRESistance:NULL:STATe
group: Resistance measurements 
section: Null (Relative) Commands

[Null value for resistance measurements]
datatype: DOUBLE
unit: Ohm
low_lim: -1.2e+6
high_lim: +1.2e+6
set_cmd: SENSe:FRESistance:NULL:VALue
state_quant: Null state for resistance measurements
state_value_1: ON
group: Resistance measurements
section: Null (Relative) Commands

[Null state for temperature measurements]
datatype: BOOLEAN
def_value: OFF
set_cmd: SENSe:TEMPerature:NULL:STATe
group: Temperature measurements 
section: Null (Relative) Commands

[Null value for temperature measurements]
datatype: DOUBLE
unit: °C
low_lim: -300
high_lim: 2000
set_cmd: SENSe:TEMPerature:NULL:VALue
state_quant: Null state for temperature measurements
state_value_1: ON
group: Temperature measurements
section: Null (Relative) Commands

# Input Filter Commands
[Filter state]
datatype: BOOLEAN
def_value: OFF
set_cmd: INPut:FILTer:STATe
section: Input Filter Commands

[Filter type]
datatype: COMBO
def_value: analog
combo_def_1: analog
combo_def_2: digital
combo_def_3: both
cmd_def_1: ANALog
cmd_def_2: DIGital
cmd_def_3: BOTH
state_quant: Filter state
state_value_1: ON
set_cmd: INPut:FILTer:TYPE
section: Input Filter Commands

[Averaging for the digital filter]
datatype: COMBO
def_value: medium (50 reading average)
combo_def_1: slow (100 reading average)
combo_def_2: medium (50 reading average)
combo_def_3: fast (10 reading average)
cmd_def_1: SLOW
cmd_def_2: MED
cmd_def_3: FAST
state_quant: Filter type
state_value_1: digital
state_value_2: both
set_cmd: INPut:FILTer:DIGital:RESPonse
section: Input Filter Commands