# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: SQE_QCS_Squeezing_Code

## The version string should be updated whenever changes are made to this config file
version: 1.0

interface: TCPIP

tcpip_specify_port: True

tcpip_port: 1000

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SQE_QCS_Squeezing_Code



# Flags for defining signal generator or signal analyzer functionality
#signal_generator: True
#signal_analyzer: True

check_model: False

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

reset: True


[Model and options]
# The option section allow instruments with different options to use the same driver


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
# Input parameters

[Pump frequency]
unit: Hz
datatype: DOUBLE
low_lim: 0
high_lim: 16e9
def_value: 6.331e9
group: Parameters

[Pump power]
unit: dBm
datatype: DOUBLE
low_lim: -50
high_lim: 10
def_value: -20
group: Parameters

[Pump phase]
unit: deg
datatype: DOUBLE
low_lim: 0
high_lim: 360
group: Parameters
def_value: 0

[Signal detuning from pump]
unit: Hz
datatype: DOUBLE
low_lim: 0
high_lim: 1e9
def_value: 100e6
group: Parameters

[Emit signal]
datatype: BOOLEAN
def_value: False
group: Parameters

[Signal power]
unit: dBm
datatype: DOUBLE
low_lim: -50
high_lim: 10
def_value: -20
group: Parameters


[Acquisition time]
unit: s
low_lim: 0
datatype: DOUBLE
def_value: 6e-6
group: parameters

[Temperature]
datatype: DOUBLE
unit: mK
def_value: 50
low_lim: 0
group: Parameters

[Number of measurements]
datatype: DOUBLE
low_lim: 0
group: Parameters
def_value: 10e6


[Perform experiment]
datatype: BOOLEAN
def_value: False
group: Parameters

# Output

[signal_pump_on]
unit: 
datatype: VECTOR_COMPLEX
permission: READ
group: Output


[idler_pump_on]
unit: 
datatype: VECTOR_COMPLEX
permission: READ
group: Output


[signal_pump_off]
unit: 
datatype: VECTOR_COMPLEX
permission: READ
group: Output


[idler_pump_off]
unit: 
datatype: VECTOR_COMPLEX
permission: READ
group: Output


[Logarithmic Negativity]
datatype: DOUBLE
permission: READ
group: Output

[Squeezing]
datatype: DOUBLE
permission: READ
group: Output

; [Calibration method]
; datatype: COMBO
; def_value: SOLR
; combo_def_1: SOLR
; combo_def_2: TRL
; combo_def_3: SOLT
; group: General settings

; ##########
; # IDEALS #
; ##########

; [Ideal short]
; datatype: PATH
; group: Ideal standards
; state_quant: Calibration method
; state_value_1: SOLR
; state_value_2: SOLT
; def_value: I:\Drive condivisi\SuperQuElectronics\Measurements\CryoRF_SPar_Calibration Standards\Ideals\Short.s2p
; tooltip: Select s2p file

; [Ideal open]
; datatype: PATH
; group: Ideal standards
; state_quant: Calibration method
; state_value_1: SOLR
; state_value_2: SOLT
; def_value: I:\Drive condivisi\SuperQuElectronics\Measurements\CryoRF_SPar_Calibration Standards\Ideals\Open.s2p
; tooltip: Select s2p file

; [Ideal load]
; datatype: PATH
; group: Ideal standards
; state_quant: Calibration method
; state_value_1: SOLR
; state_value_2: SOLT
; def_value: I:\Drive condivisi\SuperQuElectronics\Measurements\CryoRF_SPar_Calibration Standards\Ideals\Load.s2p
; tooltip: Select s2p file

; [Ideal reciprocal]
; datatype: PATH
; group: Ideal standards
; def_value: I:\Drive condivisi\SuperQuElectronics\Measurements\CryoRF_SPar_Calibration Standards\Ideals\Thru.s2p
; state_quant: Calibration method
; state_value_1: SOLR
; tooltip: Select s2p file

; [Ideal thru]
; datatype: PATH
; group: Ideal standards
; def_value: I:\Drive condivisi\SuperQuElectronics\Measurements\CryoRF_SPar_Calibration Standards\Ideals\Thru.s2p
; state_quant: Calibration method
; state_value_1: SOLT
; state_value_2: TRL
; tooltip: Select s2p file

; [Ideal reflect]
; datatype: PATH
; group: Ideal standards
; state_quant: Calibration method
; state_value_1: TRL
; def_value: I:\Drive condivisi\SuperQuElectronics\Measurements\CryoRF_SPar_Calibration Standards\Ideals\Reflect.s2p
; tooltip: Select s2p file

; [Ideal line]
; datatype: PATH
; group: Ideal standards
; state_quant: Calibration method
; state_value_1: TRL
; def_value: I:\Drive condivisi\SuperQuElectronics\Measurements\CryoRF_SPar_Calibration Standards\Ideals\Line.s2p
; tooltip: Select s2p file


; ######################
; # MEASURED STANDARDS #
; ######################

; [Load last cal]
; label: Automically detect last calibration folder in the specified database
; datatype: BOOLEAN
; group: Measured standards & switch-terms
; def_value: True

; [Database for the SNP files]
; datatype: PATH
; group: General settings
; def_value: I:\Drive condivisi\SuperQuElectronics\Measurements\CryoRF_SPar_Calibration Standards\SOLR_Cal_Kit SMA 1
; tooltip: The global folder where all the standards' acquistions are stored
; state_quant: Load last cal
; state_value_1: True

; [Measured short]
; datatype: PATH
; group: Measured standards & switch-terms
; state_quant: Calibration method
; state_value_1: SOLR
; state_value_2: SOLT
; tooltip: Select s2p file
; second_state_quant: Load last cal
; second_state_value_1: False

; [Measured open]
; datatype: PATH
; group: Measured standards & switch-terms
; state_quant: Calibration method
; state_value_1: SOLR
; state_value_2: SOLT
; tooltip: Select s2p file
; second_state_quant: Load last cal
; second_state_value_1: False

; [Measured load]
; datatype: PATH
; group: Measured standards & switch-terms
; state_quant: Calibration method
; state_value_1: SOLR
; state_value_2: SOLT
; tooltip: Select s2p file
; second_state_quant: Load last cal
; second_state_value_1: False

; [Measured reciprocal]
; datatype: PATH
; group: Measured standards & switch-terms
; state_quant: Calibration method
; state_value_1: SOLR
; tooltip: Select s2p file
; second_state_quant: Load last cal
; second_state_value_1: False

; [Measured thru]
; datatype: PATH
; group: Measured standards & switch-terms
; state_quant: Calibration method
; state_value_1: SOLT
; state_value_2: TRL
; tooltip: Select s2p file
; second_state_quant: Load last cal
; second_state_value_1: False

; [Measured reflect]
; datatype: PATH
; group: Measured standards & switch-terms
; state_quant: Calibration method
; state_value_1: TRL
; tooltip: Select s2p file
; second_state_quant: Load last cal
; second_state_value_1: False

; [Measured line]
; datatype: PATH
; group: Measured standards & switch-terms
; state_quant: Calibration method
; state_value_1: TRL
; tooltip: Select s2p file
; second_state_quant: Load last cal
; second_state_value_1: False

; ################
; # MORE OPTIONS #
; ################

; [Measured a2/b2_1]
; label: Measured forward switch-term
; datatype: PATH
; group: Measured standards & switch-terms
; tooltip: Select s1p file
; state_quant: Load last cal
; state_value_1: False

; [Measured a1/b1_2]
; label: Measured reverse switch-term
; datatype: PATH
; group: Measured standards & switch-terms
; tooltip: Select s1p file
; state_quant: Load last cal
; state_value_1: False

; [Apply custom fixture removal]
; datatype: BOOLEAN
; group: Fixture removal
; def_value: False

; [Fixture on port 1]
; datatype: PATH
; tooltip: Select s2p file
; group: Fixture removal
; state_quant: Apply custom fixture removal
; state_value_1: True

; [Fixture on port 2]
; datatype: PATH
; tooltip: Select s2p file
; group: Fixture removal
; state_quant: Apply custom fixture removal
; state_value_1: True

; [Apply default fixture removal]
; label: Apply fixture removal based on reciprocal standard
; datatype: BOOLEAN
; group: Fixture removal
; def_value: False
; state_quant: Apply custom fixture removal
; state_value_1: False
; second_state_quant: Calibration method
; second_state_value_1: SOLR
; tooltip: WARNING: This method is a rough approximation based just on the length of the cables, while other contributions (connectors, windings, etc) are neglected

; [Length of fixture on port 1]
; unit: Length of reciprocal standard
; datatype: DOUBLE
; low_lim: 0
; high_lim: 1
; def_value: 0.5
; group: Fixture removal
; state_quant: Apply default fixture removal
; state_value_1: True

; [Length of fixture on port 2]
; unit: Length of reciprocal standard
; datatype: DOUBLE
; low_lim: 0
; high_lim: 1
; def_value: 0.5
; group: Fixture removal
; state_quant: Apply default fixture removal
; state_value_1: True


; ###########
; # SIGNALS #
; ###########

; [Frequency range]
; datatype: VECTOR
; x_name: Frequency
; x_unit: Hz
; permission: WRITE
; show_in_measurement_dlg: True

; [Raw S11]
; datatype: VECTOR_COMPLEX
; x_name: Frequency
; x_unit: Hz
; show_in_measurement_dlg: True
; group: General settings

; [Raw S12]
; datatype: VECTOR_COMPLEX
; x_name: Frequency
; x_unit: Hz
; show_in_measurement_dlg: True
; group: General settings

; [Raw S21]
; datatype: VECTOR_COMPLEX
; x_name: Frequency
; x_unit: Hz
; show_in_measurement_dlg: True
; group: General settings

; [Raw S22]
; datatype: VECTOR_COMPLEX
; x_name: Frequency
; x_unit: Hz
; show_in_measurement_dlg: True
; group: General settings

; [Corrected S11]
; datatype: VECTOR_COMPLEX
; x_name: Frequency
; x_unit: Hz
; permission: READ
; show_in_measurement_dlg: True
; group: General settings

; [Corrected S12]
; datatype: VECTOR_COMPLEX
; x_name: Frequency
; x_unit: Hz
; permission: READ
; show_in_measurement_dlg: True
; group: General settings

; [Corrected S21]
; datatype: VECTOR_COMPLEX
; x_name: Frequency
; x_unit: Hz
; permission: READ
; show_in_measurement_dlg: True
; group: General settings

; [Corrected S22]
; datatype: VECTOR_COMPLEX
; x_name: Frequency
; x_unit: Hz
; permission: READ
; show_in_measurement_dlg: True
; group: General settings