# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: INRiM_QSwitchBox

# The version string should be updated whenever changes are made to this config file
version: 1.0 										

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
# driver_path: INRiM_QSwitchBox

#Pre-defined communication interface for instrument, default is GPIB.
#Valid values are GPIB, TCPIP, USB, PXI, Serial, VISA, Other, None.
interface: Serial

#Set to True if driver is a Signal Generator. Default is False.

#Set to True if driver is a Signal Analyzer. Default is False.

#Set to True if driver is a Controller. Default is False.

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True




[Model and options]
# The option section allow instruments with different options to use the same driver


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
[Mode]
datatype: COMBO
combo_def_1: Coordinate
combo_def_2: Separate
def_value: Coordinate

[Path]
datatype: DOUBLE
high_lim: 6
low_lim: 0
def_value: 0
set_cmd: BOTH<*>
get_cmd: BOTH?
state_quant: Mode
state_value_1: Coordinate

[Switch1]
datatype: DOUBLE
high_lim: 6
low_lim: 0
def_value: 0
set_cmd: SW1<*>
get_cmd: SW1?
state_quant: Mode
state_value_1: Separate

[Switch2]
datatype: DOUBLE
high_lim: 6
low_lim: 0
def_value: 0
set_cmd: SW2<*>
get_cmd: SW2?
state_quant: Mode
state_value_1: Separate

[PulseWidth]
datatype: DOUBLE
def_value:20
unit: ms
permission: BOTH

[Risp]
datatype: STRING
def_value:
unit:
permission: BOTH
