# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: SQE_RohdeSchwarz_NetworkAnalyzer_with_RTSwitchBox

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SQE_RohdeSchwarz_NetworkAnalyzer_with_RTSwitchBox

# default interface and address
interface: VISA
address: USB0::0x0AAD::0x01A1::102254::INSTR


[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: ZVA
model_str_2: ZVB
model_str_3: ZVT

# Check instrument model id at startup (True or False). Default is False
check_model: False

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: Rohde&Schwarz,ZVA
model_id_2: Rohde&Schwarz,ZVB
model_id_3: Rohde&Schwarz,ZVT


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 10

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: :INIT:CONT ON;:FORM:BORD NORM;

# Boolean string values (used for sending True/False to instrument), default is 1 and 0
#str_true: ON
#str_false: OFF

# Final commands sent to the instrument when closing the driver
final: 


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
[RTSwitchBox address]
datatype: STRING
def_value: ASRL6::INSTR
section: SwitchBox settings

[Switch on VNA port 1]
datatype: COMBO
combo_def_1: A
combo_def_2: B
combo_def_3: C
combo_def_4: D
combo_def_5: E
combo_def_6: F
combo_def_7: G
combo_def_8: H
def_value: A
section: SwitchBox settings

[Switch on VNA port 2]
datatype: COMBO
combo_def_1: A
combo_def_2: B
combo_def_3: C
combo_def_4: D
combo_def_5: E
combo_def_6: F
combo_def_7: G
combo_def_8: H
def_value: B
section: SwitchBox settings

[Network S11]
x_name: Frequency
x_unit: Hz
datatype: VECTOR_COMPLEX
permission: READ
group: Signals

[Network S21]
x_name: Frequency
x_unit: Hz
datatype: VECTOR_COMPLEX
permission: READ
group: Signals

[Network S12]
x_name: Frequency
x_unit: Hz
datatype: VECTOR_COMPLEX
permission: READ
group: Signals

[Network S22]
x_name: Frequency
x_unit: Hz
datatype: VECTOR_COMPLEX
permission: READ
group: Signals

[S11 - Enabled]
datatype: BOOLEAN
def_value: False
group: Signals

[S21 - Enabled]
datatype: BOOLEAN
def_value: True
group: Signals

[S12 - Enabled]
datatype: BOOLEAN
def_value: False
group: Signals

[S22 - Enabled]
datatype: BOOLEAN
def_value: False
group: Signals

[S11]
x_name: Frequency
x_unit: Hz
datatype: VECTOR_COMPLEX
permission: READ
group: Signals

[S21]
x_name: Frequency
x_unit: Hz
datatype: VECTOR_COMPLEX
permission: READ
group: Signals

[S12]
x_name: Frequency
x_unit: Hz
datatype: VECTOR_COMPLEX
permission: READ
group: Signals

[S22]
x_name: Frequency
x_unit: Hz
datatype: VECTOR_COMPLEX
permission: READ
group: Signals

[Output enabled]
datatype: BOOLEAN
def_value: False
set_cmd: :OUTP
group: Output

[Output power]
datatype: DOUBLE
def_value: -30.0
unit: dBm
set_cmd: :SOUR:POW
group: Output

[IF bandwidth]
datatype: DOUBLE
def_value: 10E3
unit: Hz
set_cmd: :SENS:BWID
group: Acquisition

[Average]
datatype: BOOLEAN
def_value: False
set_cmd: :SENS:AVER
group: Acquisition

[# of averages]
datatype: STRING
def_value: 10
#low_lim: 1
#high_lim: 65536
set_cmd: :SENS:AVER:COUN
group: Acquisition

[Wait for new trace]
datatype: BOOLEAN
def_value: True
group: Acquisition

[Range type]
datatype: COMBO
def_value: Start - Stop
combo_def_1: Center - Span
combo_def_2: Start - Stop
permission: NONE
group: Horizontal

[Start frequency]
datatype: DOUBLE
def_value: 4E9
unit: Hz
set_cmd: :SENS:FREQ:STAR
state_quant: Range type
state_value_1: Start - Stop
group: Horizontal

[Stop frequency]
datatype: DOUBLE
def_value: 12E9
unit: Hz
set_cmd: :SENS:FREQ:STOP
state_quant: Range type
state_value_1: Start - Stop
group: Horizontal

[Center frequency]
datatype: DOUBLE
def_value: 8E9
unit: Hz
set_cmd: :SENS:FREQ:CENT
state_quant: Range type
state_value_1: Center - Span
group: Horizontal

[Span]
datatype: DOUBLE
def_value: 8E9
unit: Hz
set_cmd: :SENS:FREQ:SPAN
state_quant: Range type
state_value_1: Center - Span
group: Horizontal

[# of points - WARNING! INTEGER ONLY!]
datatype: STRING
def_value: 201
set_cmd: :SENS:SWE:POIN
group: Horizontal

[Sweep type]
datatype: COMBO
def_value: Linear
combo_def_1: Linear
combo_def_2: Log
cmd_def_1: LIN
cmd_def_2: LOG
set_cmd: :SENS:SWE:TYPE
group: Horizontal


