# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: SQE_Stanford_SRS_SIM900 Mainframe

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SQE_Stanford_SRS_SIM900

interface: GPIB
address: 2
startup: Do nothing



[Model and options]
# The option section allow instruments with different options to use the same driver
model_id_1: SIM900

# Check instrument model id at startup (True or False). Default is False
check_model: False

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 3

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 

# Serial port baud rate for either the actual device, or the SIM900 mainframe
baud_rate: 115200

term_char: CR+LF

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
[Slot 1]
datatype: STRING
permission: READ
group: Instruments

[Slot 2]
datatype: STRING
permission: READ
group: Instruments

[Slot 3]
datatype: STRING
permission: READ
group: Instruments

[Slot 4]
datatype: STRING
permission: READ
group: Instruments

[Slot 5]
datatype: STRING
permission: READ
group: Instruments

[Slot 6]
datatype: STRING
permission: READ
group: Instruments

[Slot 7]
datatype: STRING
permission: READ
group: Instruments

[Slot 8]
datatype: STRING
permission: READ
group: Instruments

[Passthrough]
datatype: STRING
permission: BOTH