# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: SQE_Two Tone Signal Generator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SQE_TwoToneSignalGenerator

# Define that the driver is a Signal Generator
signal_generator: True

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
[Frequency 1]
datatype: DOUBLE
unit: Hz
def_value: 10.0
tooltip: Frequency of Tone 1

[Frequency 2]
datatype: DOUBLE
unit: Hz
def_value: 20.0
tooltip: Frequency of Tone 2

[Amplitude 1]
datatype: DOUBLE
unit: V
def_value: 1.0
tooltip: Amplitude of Tone 1

[Amplitude 2]
datatype: DOUBLE
unit: V
def_value: 1.0
tooltip: Amplitude of Tone 2

[Phase 1]
datatype: DOUBLE
unit: deg
def_value: 0.0
tooltip: Phase of Tone 1

[Phase 2]
datatype: DOUBLE
unit: deg
def_value: 0.0
tooltip: Phase of Tone 2

[Duration]
datatype: DOUBLE
unit: s
def_value: 1.0

[Number of points]
datatype: DOUBLE
def_value: 1000

[Add noise]
datatype: BOOLEAN
def_value: False

[Noise amplitude]
datatype: DOUBLE
unit: V
def_value: 0.1
state_quant: Add noise
state_value_1: True

[Signal]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s
