# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: SQE_VIRTUAL_CalKit

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_COMBO: SQE_VIRTUAL_CalKit


# Flags for defining signal generator or signal analyzer functionality
signal_generator: True
signal_analyzer: True

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


[Model and options]
# The option section allow instruments with different options to use the same driver


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
[Calibration method]
datatype: COMBO
def_value: SOLR
combo_def_1: SOLR
combo_def_2: TRL
combo_def_3: SOLT
group: General settings

[Folder to save s2p files in]
datatype: PATH
group: General settings

#############################
# POSITION OF THE STANDARDS #
#############################

[Position of short standard]
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
group: Position of standards
state_quant: Calibration method
state_value_1: SOLR
state_value_2: SOLT

[Position of open standard]
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
group: Position of standards
state_quant: Calibration method
state_value_1: SOLR
state_value_2: SOLT

[Position of load standard]
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
group: Position of standards
state_quant: Calibration method
state_value_1: SOLR
state_value_2: SOLT

[Position of reciprocal standards]
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
group: Position of standards
state_quant: Calibration method
state_value_1: SOLR

[Position of thru standards]
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
group: Position of standards
state_quant: Calibration method
state_value_1: SOLT
state_value_2: TRL

[Position of reflect standards]
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
group: Position of standards
state_quant: Calibration method
state_value_1: TRL

[Position of line standards]
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
group: Position of standards
state_quant: Calibration method
state_value_1: TRL

###########
# General settings #
###########

[Input S11]
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
permission: WRITE
show_in_measurement_dlg: True
Group: General settings

[Input S12]
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
permission: WRITE
show_in_measurement_dlg: True
Group: General settings

[Input S21]
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
permission: WRITE
show_in_measurement_dlg: True
Group: General settings

[Input S22]
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
permission: WRITE
show_in_measurement_dlg: True
Group: General settings

[Output S11]
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
permission: READ
show_in_measurement_dlg: True
Group: General settings

[Output S12]
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
permission: READ
show_in_measurement_dlg: True
Group: General settings

[Output S21]
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
permission: READ
show_in_measurement_dlg: True
Group: General settings

[Output S22]
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
permission: READ
show_in_measurement_dlg: True
Group: General settings

[Selected switch]
datatype: DOUBLE
high_lim: 6
low_lim: 0
def_value: 0
permission: WRITE
Group: QSwitchBox state
show_in_measurement_dlg: True