# Outstrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: SQE_VIRTUAL_ComplexToReal
# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SQE_VIRTUAL_ComplexToReal


# Flags for defining signal generator or signal analyzer functionality
signal_generator: True
signal_analyzer: True

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


[Model and options]
# The option section allow instruments with different options to use the same driver


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
[X-axis Unit]
datatype: COMBO
def_value: Frequency [Hz]
combo_def_1: Frequency [Hz]
combo_def_2: Time [s]

[Measurement type]
datatype: COMBO
combo_def_1: Absolute
combo_def_2: Relative
tooltip: If "absolute", then the input waveform is assumed to be in V, and the logarithmic magnitude will be expressed in dBm accordingly. Otherwise, the logarithmic amplitude will be expressed in dB.
def_value: Relative

[Phase unit]
datatype: COMBO
combo_def_1: Degrees
combo_def_2: Radians
def_value: Degrees

# WAVEFORM IN FREQUENCY DOMAIN

[Complex waveform In-Hz]
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
permission: WRITE
state_quant: X-axis Unit
state_value_1: Frequency [Hz]

[Linear magnitude Out-Hz]
datatype: VECTOR
x_name: Frequency
x_unit: Hz
permission: READ
state_quant: X-axis Unit
state_value_1: Frequency [Hz]

[Logarithmic magnitude Out-Hz]
datatype: VECTOR
x_name: Frequency
x_unit: Hz
permission: READ
state_quant: X-axis Unit
state_value_1: Frequency [Hz]

[Real part Out-Hz]
datatype: VECTOR
x_name: Frequency
x_unit: Hz
permission: READ
state_quant: X-axis Unit
state_value_1: Frequency [Hz]

[Imaginary part Out-Hz]
datatype: VECTOR
x_name: Frequency
x_unit: Hz
permission: READ
state_quant: X-axis Unit
state_value_1: Frequency [Hz]

[Phase Out-Hz]
datatype: VECTOR
x_name: Frequency
x_unit: Hz
permission: READ
state_quant: X-axis Unit
state_value_1: Frequency [Hz]

[Unwrapped phase Out-Hz]
datatype: VECTOR
x_name: Frequency
x_unit: Hz
permission: READ
state_quant: X-axis Unit
state_value_1: Frequency [Hz]

# WAVEFORM IN TIME DOMAIN

[Complex waveform In-s]
datatype: VECTOR_COMPLEX
x_name: Time
x_unit: s
permission: WRITE
state_quant: X-axis Unit
state_value_1: Time [s]

[Linear magnitude Out-s]
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
state_quant: X-axis Unit
state_value_1: Time [s]

[Logarithmic magnitude Out-s]
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
state_quant: X-axis Unit
state_value_1: Time [s]

[Phase Out-s]
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
state_quant: X-axis Unit
state_value_1: Time [s]

[Unwrapped phase Out-s]
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
state_quant: X-axis Unit
state_value_1: Time [s]