# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: SQE_VIRTUAL_TimeDomain

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SQE_VIRTUAL_TimeDomain


# Flags for defining signal generator or signal analyzer functionality
signal_generator: True
signal_analyzer: True

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


[Model and options]
# The option section allow instruments with different options to use the same driver


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
[Input type]
datatype: COMBO
combo_def_1: Real
combo_def_2: Complex
def_value: Complex

[Keep negative time values]
datatype: BOOLEAN
def_value: False
tooltip: If set to False, the section of the trace corresponding to negative time values is discarded


###########
# Signals #
###########


[Complex input]
label: Frequency-domain input
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
show_in_measurement_dlg: True
state_quant: Input type
state_value_1: Complex

[Real input]
label: Frequency-domain input
datatype: VECTOR
x_name: Frequency
x_unit: Hz
show_in_measurement_dlg: True
state_quant: Input type
state_value_1: Real

[Time-domain output]
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
show_in_measurement_dlg: True

