# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name:SQE_VIRTUAL_TrendFinder

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SQE_VIRTUAL_TrendFinder


# Flags for defining signal generator or signal analyzer functionality
signal_generator: True
signal_analyzer: True

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


# [Mode and options]
# The option section allow instruments with different options to use the same driver


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
###########
# Signals #
###########

[Input type]
datatype: COMBO
combo_def_1: Real
combo_def_2: Complex
def_value: Complex

[Method]
datatype: COMBO
combo_def_1: Mean value
combo_def_2: Linear fit
combo_def_3: Linear fit on log scale
combo_def_4: Savitsky-Golay filter
def_value: Savitsky-Golay filter
tooltip: A trend is found on both amplitude and phase. The Savitsky-Golay filter is used on both, while the other methods use a linear fit on the phase regardless 

[Specify window as...]
datatype: COMBO
combo_def_1: Number of points
combo_def_2: BW
state_quant: Method
state_value_1: Savitsky-Golay filter
def_value: BW

[BW]
datatype: DOUBLE
unit: Hz
low_lim: 0
state_quant: Method
state_value_1: Savitsky-Golay filter
second_state_quant: Specify window as...
second_state_value_1: BW

[Number of points]
datatype: DOUBLE
low_lim: 0
state_quant: Method
state_value_1: Savitsky-Golay filter
second_state_quant: Specify window as...
second_state_value_1: Number of points

[Degree of polynomial]
datatype: DOUBLE
low_lim: 0
state_quant: Method
state_value_1: Savitsky-Golay filter
def_value: 3

[Complex input signal]
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
state_quant: Input type
state_value_1: Complex

[Complex trend]
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
permission: READ
state_quant: Input type
state_value_1: Complex

[Complex de-trended signal]
datatype: VECTOR_COMPLEX
x_name: Frequency
x_unit: Hz
permission: READ
state_quant: Input type
state_value_1: Complex

[Real input signal]
datatype: VECTOR
x_name: Frequency
x_unit: Hz
state_quant: Input type
state_value_1: Real

[Real trend]
datatype: VECTOR
x_name: Frequency
x_unit: Hz
permission: READ
state_quant: Input type
state_value_1: Real

[Real de-trended signal]
datatype: VECTOR
x_name: Frequency
x_unit: Hz
permission: READ
state_quant: Input type
state_value_1: Real
